<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Miniscope;assembly=OpenEphys.Miniscope"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:commutator="clr-namespace:OpenEphys.Commutator;assembly=OpenEphys.Commutator"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UclaMiniscopeV4">
          <p1:Index>0</p1:Index>
          <p1:LedBrightness>0</p1:LedBrightness>
          <p1:Focus>0</p1:Focus>
          <p1:SensorGain>Low</p1:SensorGain>
          <p1:FramesPerSecond>Fps30</p1:FramesPerSecond>
          <p1:LedRespectsDigitalIn>None</p1:LedRespectsDigitalIn>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Commutator</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="RightTurnKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Right</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="LeftTurnKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Left</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="commutator:QuaternionToTwist">
                <commutator:HeadstageAxis>
                  <commutator:X>0</commutator:X>
                  <commutator:Y>0</commutator:Y>
                  <commutator:Z>1</commutator:Z>
                </commutator:HeadstageAxis>
                <commutator:CommutatorAxis>
                  <commutator:X>0</commutator:X>
                  <commutator:Y>0</commutator:Y>
                  <commutator:Z>1</commutator:Z>
                </commutator:CommutatorAxis>
                <commutator:FallbackThreshold>-0.9</commutator:FallbackThreshold>
                <commutator:FallbackRotation>Global</commutator:FallbackRotation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
              <Property Name="Enable" />
              <Property Name="EnableLed" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="commutator:SerialCommutator">
                  <commutator:PortName>COM3</commutator:PortName>
                  <commutator:Enable>true</commutator:Enable>
                  <commutator:EnableLed>true</commutator:EnableLed>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>